<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 04/05/2005 at 11:52:43 using:

COR (0.9.31.59)
Copyright 2002-2005 Oxford Cardiac Electrophysiology Group
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="noble_1962_version04" name="noble_1962_version04">
   
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Noble Purkinje Fibre Model 1962</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
      This version of the model has been curated by Penny Noble using
      COR and is known to read in to JSim.
    </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
In 1962, Denis Noble published one of the first mathematical models of a cardiac cell.  By adapting the equations of the original <ulink url="${HTML_EXMPL_HHSA_INTRO}">Hodgkin-Huxley squid axon model (1952)</ulink>, Noble described the long lasting action and pace-maker potentials of the Purkinje fibres of the heart.  The potassium-current equations differ from those of Hodgkin and Huxley in that the potassium ions are assumed to flow through two types of channel in the membrane.  By contrast, the sodium current equations are very similar to those of Hodgkin and Huxley.
</para>

<para>
The main failure of the Noble (1962) model is that it only includes one voltage gated inward current, I<subscript>Na</subscript>.  Calcium currents had not yet been discovered, but there was a clue in the model that something was missing.  The only way the model could be made to work was to greatly extend the voltage range of the sodium current by reducing the voltage dependence of the sodium activation process.  In effect the sodium current was made to serve the function of both the sodium and the calcium channels as far as the plateau is concerned.  There was a clear experimental prediction: either sodium channels in the heart are quantitatively different from those in neurons, or other inward current-carrying channels must exist.  Both predictions are correct.
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
A Modification of the Hodgkin-Huxley Equations Applicable to Purkinje Fibre Action and Pace-maker Potentials, Noble, D. 1962 <ulink url="http://www.jphysiol.org/">
            <emphasis>Journal of Physiology</emphasis>
          </ulink>, 160, 317-352.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=14480151&amp;dopt=Abstract">PubMed ID: 14480151</ulink>
</para>

<para>
The raw CellML description of the Noble 1962 model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>.  For an example of a more complete documentation for an electrophysiological model, see <ulink url="${HTML_EXMPL_HHSA_INTRO}">The Hodgkin-Huxley Squid Axon Model, 1952</ulink>. 
</para>

</sect1>
</article>
</documentation>

  

   <units name="per_millisecond">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_millivolt">
      <unit units="volt" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_millivolt_millisecond">
      <unit units="millivolt" exponent="-1"/>
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="milliS_per_cm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microF_per_cm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microA_per_cm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <component name="environment">
      <variable units="millisecond" public_interface="out" name="time"/>
   </component>
   <component name="membrane">
      <variable units="millivolt" public_interface="out" name="V" initial_value="-87.0"/>
      <variable units="microF_per_cm2" name="Cm" initial_value="12.0"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Na"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_K"/>
      <variable units="microA_per_cm2" public_interface="in" name="i_Leak"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>i_Na</ci>
                     <ci>i_K</ci>
                     <ci>i_Leak</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel">
      <variable units="microA_per_cm2" public_interface="out" name="i_Na"/>
      <variable units="milliS_per_cm2" name="g_Na_max" initial_value="400.0"/>
      <variable units="milliS_per_cm2" name="g_Na"/>
      <variable units="millivolt" name="E_Na" initial_value="40.0"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="m"/>
      <variable units="dimensionless" private_interface="in" name="h"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>g_Na</ci>
            <apply>
               <times/>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">3.0</cn>
               </apply>
               <ci>h</ci>
               <ci>g_Na_max</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <cn cellml:units="dimensionless">1000</cn>
               <apply>
                  <plus/>
                  <ci>g_Na</ci>
                  <cn cellml:units="milliS_per_cm2">0.14</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel_m_gate">
      <variable units="dimensionless" public_interface="out" name="m" initial_value="0.01"/>
      <variable units="per_millisecond" name="alpha_m"/>
      <variable units="per_millisecond" name="beta_m"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="dimensionless">1000.0</cn>
                  <cn cellml:units="per_millivolt_millisecond">0.1</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                     </apply>
                     <cn cellml:units="millivolt">48.0</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn cellml:units="millivolt">48.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">15.0</cn>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1.0</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="dimensionless">1000.0</cn>
                  <cn cellml:units="per_millivolt_millisecond">0.12</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="millivolt">8.0</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">8.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">5.0</cn>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1.0</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1.0</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel_h_gate">
      <variable units="dimensionless" public_interface="out" name="h" initial_value="0.8"/>
      <variable units="per_millisecond" name="alpha_h"/>
      <variable units="per_millisecond" name="beta_h"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <cn cellml:units="dimensionless">1000.0</cn>
               <cn cellml:units="per_millisecond">0.17</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                        </apply>
                        <cn cellml:units="millivolt">90.0</cn>
                     </apply>
                     <cn cellml:units="millivolt">20.0</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="dimensionless">1000.0</cn>
                  <cn cellml:units="per_millisecond">1.0</cn>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1.0</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn cellml:units="millivolt">42.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">10.0</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1.0</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="potassium_channel">
      <variable units="microA_per_cm2" public_interface="out" name="i_K"/>
      <variable units="milliS_per_cm2" name="g_K1"/>
      <variable units="milliS_per_cm2" name="g_K2"/>
      <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      <variable units="dimensionless" private_interface="in" name="n"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K</ci>
            <apply>
               <times/>
               <cn cellml:units="dimensionless">1000.0</cn>
               <apply>
                  <plus/>
                  <ci>g_K1</ci>
                  <ci>g_K2</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="millivolt">100.0</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>g_K1</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <cn cellml:units="milliS_per_cm2">1.2</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn cellml:units="millivolt">90.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">50.0</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="milliS_per_cm2">0.015</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">90.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">60.0</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>g_K2</ci>
            <apply>
               <times/>
               <cn cellml:units="milliS_per_cm2">1.2</cn>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">4.0</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="potassium_channel_n_gate">
      <variable units="dimensionless" public_interface="out" name="n" initial_value="0.01"/>
      <variable units="per_millisecond" name="alpha_n"/>
      <variable units="per_millisecond" name="beta_n"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_n</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="dimensionless">1000.0</cn>
                  <cn cellml:units="per_millivolt_millisecond">0.0001</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                     </apply>
                     <cn cellml:units="millivolt">50.0</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                           </apply>
                           <cn cellml:units="millivolt">50.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">10.0</cn>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1.0</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_n</ci>
            <apply>
               <times/>
               <cn cellml:units="dimensionless">1000.0</cn>
               <cn cellml:units="per_millisecond">0.002</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                        </apply>
                        <cn cellml:units="millivolt">90.0</cn>
                     </apply>
                     <cn cellml:units="millivolt">80.0</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_n</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1.0</cn>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_n</ci>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="leakage_current">
      <variable units="microA_per_cm2" public_interface="out" name="i_Leak"/>
      <variable units="milliS_per_cm2" name="g_L" initial_value="0.075"/>
      <variable units="millivolt" name="E_L" initial_value="-60.0"/>
      <variable units="millisecond" public_interface="in" name="time"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Leak</ci>
            <apply>
               <times/>
               <cn cellml:units="dimensionless">1000.0</cn>
               <ci>g_L</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="sodium_channel">
            <component_ref component="sodium_channel_m_gate"/>
            <component_ref component="sodium_channel_h_gate"/>
         </component_ref>
         <component_ref component="potassium_channel">
            <component_ref component="potassium_channel_n_gate"/>
         </component_ref>
         <component_ref component="leakage_current"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="sodium_channel">
         <component_ref component="sodium_channel_m_gate"/>
         <component_ref component="sodium_channel_h_gate"/>
      </component_ref>
      <component_ref component="potassium_channel">
         <component_ref component="potassium_channel_n_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_2="environment" component_1="membrane"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="sodium_channel"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="potassium_channel"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="leakage_current"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection>
      <map_components component_2="sodium_channel" component_1="membrane"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Na" variable_1="i_Na"/>
   </connection>
   <connection>
      <map_components component_2="potassium_channel" component_1="membrane"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_K" variable_1="i_K"/>
   </connection>
   <connection>
      <map_components component_2="leakage_current" component_1="membrane"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Leak" variable_1="i_Leak"/>
   </connection>
   <connection>
      <map_components component_2="sodium_channel_m_gate" component_1="sodium_channel"/>
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="sodium_channel_h_gate" component_1="sodium_channel"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection>
      <map_components component_2="potassium_channel_n_gate" component_1="potassium_channel"/>
      <map_variables variable_2="n" variable_1="n"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>





<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#citationAuthorsSeq">
    <rdf:li rdf:resource="rdf:#author1Vcard"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#1ac643bb-53ff-4666-89b0-819cdf84034c">
    <vCard:N rdf:resource="rdf:#93453950-5f08-4363-90bd-aff472ce905e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e91df542-a47c-43d9-b0ff-b0767719d581">
    <vCard:Orgname>Oxford University</vCard:Orgname>
    <vCard:Orgunit>unknown</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d361dbed-f19b-485d-8867-4e0d872c759f">
    <dcterms:W3CDTF>1962-01-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#29ec82ff-8775-4a8a-affa-2d23d612180b">
    <dcterms:W3CDTF>2006-03-31</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#beb41b97-2140-4be6-90b6-3623137c9280">
    <dc:title>Journal of Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <cmeta:modification rdf:resource="rdf:#fa6607cc-772f-491c-b0bd-c8c641feed13"/>
    <dcterms:created rdf:resource="rdf:#4851a981-8fa2-4fc8-a679-cbdb4a1da137"/>
    <dc:creator rdf:resource="rdf:#967adaad-713c-4689-a962-e69b626e2248"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#967adaad-713c-4689-a962-e69b626e2248">
    <vCard:ORG rdf:resource="rdf:#e91df542-a47c-43d9-b0ff-b0767719d581"/>
    <vCard:EMAIL rdf:resource="rdf:#1167aea9-f639-491b-90fd-f4b23332d66d"/>
    <vCard:N rdf:resource="rdf:#5a885652-b58c-469d-b4d3-8b4923e85adb"/>
  </rdf:Description>
  <rdf:Description rdf:about="#noble_1962_version04">
    <bqs:reference rdf:resource="rdf:#758c601d-5750-4cff-a766-21dc765e9eac"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author1Vcard">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#author1VcardN"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4851a981-8fa2-4fc8-a679-cbdb4a1da137">
    <dcterms:W3CDTF>2005-05-04</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c9f44643-39dd-4530-8e7d-9bcc4d89c32c">
    <dc:creator rdf:resource="rdf:#citationAuthorsSeq"/>
    <dc:title>A Modification of the Hodgkin-Huxley Equations Applicable to Purkinje Fibre Action and Pace-Maker Potentials</dc:title>
    <bqs:volume>160</bqs:volume>
    <bqs:first_page>317</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#beb41b97-2140-4be6-90b6-3623137c9280"/>
    <dcterms:issued rdf:resource="rdf:#d361dbed-f19b-485d-8867-4e0d872c759f"/>
    <bqs:last_page>352</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#author1VcardN">
    <vCard:Given>D</vCard:Given>
    <vCard:Family>Noble</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1167aea9-f639-491b-90fd-f4b23332d66d">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>penny.noble@physiol.ox.ac.uk</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fa6607cc-772f-491c-b0bd-c8c641feed13">
    <dcterms:modified rdf:resource="rdf:#29ec82ff-8775-4a8a-affa-2d23d612180b"/>
    <rdf:value>
          added metadata
        </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#1ac643bb-53ff-4666-89b0-819cdf84034c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#93453950-5f08-4363-90bd-aff472ce905e">
    <vCard:Given>Peter</vCard:Given>
    <vCard:Family>Villiger</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#758c601d-5750-4cff-a766-21dc765e9eac">
    <bqs:JournalArticle rdf:resource="rdf:#c9f44643-39dd-4530-8e7d-9bcc4d89c32c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5a885652-b58c-469d-b4d3-8b4923e85adb">
    <vCard:Given>Penny</vCard:Given>
    <vCard:Family>Noble</vCard:Family>
    <vCard:Other>unknown</vCard:Other>
  </rdf:Description>
</rdf:RDF>
</model>